{ load_file("nrngui.hoc") }

if (isBaseOrNanoStart) {
    load_file("CellInit.hoc")
    load_file("CellUpdate.hoc")
    // !! move to caller file
    if (isAstrocyte()) {
        load_file("../NanoCore/Astrocyte/AstrocyteNanoInitUpdate.hoc")
        objref nanoDistal_ref, nanoProximal_ref // !! just to source MechanismSwitch_deprecated.hoc without errors
    } else if (isMicroglia()) {
        load_file("../NanoCore/Microglia/MicrogliaNanoInitUpdate.hoc")
        objref nanoDistal_ref, nanoProximal_ref // !! just to source MechanismSwitch_deprecated.hoc without errors
    }
    load_file("InitParamsMain.hoc")
}

{ load_file("MainUi.hoc") }

{ load_file("GeometricalParameters.hoc") }

// Restore the full-featured geomMath from InterModularGeomMath.hoc
// (GeometricalParameters.hoc overrides it with a simpler version)
geomMath = new GeometryMath()

objref apc

// Opens the main program window.
proc runMain() {
    if (isBaseOrNanoStart) {
        initCell()          // !! this does not init nanogeometry anymore
        initParamsMain()    // !! this does
        
        // One default APCount
        // (we create it after the call of "proc initCell" because the proc changes nseg in soma)
        soma_ref.o(0).sec apc = new APCount(0.5)    // "proc initCell" assigns an even value to nseg, so the location "0.5" will be corrected by NEURON a bit to match the segment centre
        apc.thresh = 0      // mV
    } else {
        compUtils.makeSureAllCompsCreatedOrImportedAndRescanned()
    }
    showRunControlPanel()
    showMainUi()
}
