
// This file is sourced just after successful completion of the import of Base geometry


// The next ones will be assigned just below
isAllOrSomeDendritesSeeded = -1
objref seededDendrite_ref, nanoBranchesManager


isAllOrSomeDendritesSeeded = 1
seededDendrite_ref = dendrite_ref

{ load_file("../Managers/SeedingDensityHelper.hoc") }
{ load_file("../NanoCore/NanoBranchesManager.hoc") }

if (isAstrocyte()) {
    nanoBranchesManager = new NanoBranchesManager(MaxNumberStalksPerDendrite)
} else if (isMicroglia()) {
    nanoBranchesManager = new NanoBranchesManager(MaxNumberStalksPerDendrite)
} else {
    nanoBranchesManager = new NanoBranchesManager(MaxNumberSpinesPerDendrite)
}

// The default distance centre
// !! we set it here and in GeometricalParameters.hoc, but in different way
// !! maybe skip this if isExternalSimStart
soma_ref.o(0).sec distance()
